# Generated by Configurator on Wed Dec 18 14:55:28 CET 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,COM7,SerialManager,COM7
Device,COM8,SerialManager,COM8
Device,Standa8SMC4Z,Standa8SMC4,Standa8SMC4Z
Device,Standa8SMC4XY,Standa8SMC4,Standa8SMC4XY
Device,Luxx-638,Omicron,Omicron
Device,Luxx-488,Omicron,Omicron
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,Cobolt,Cobolt,Cobolt

# Pre-init settings for devices
Property,Standa8SMC4Z,Port Z,xi-com:%5C%5C.%5CCOM3
Property,Standa8SMC4Z,UnitMultiplier,1.2500
Property,Standa8SMC4XY,Port X,xi-com:%5C%5C.%5CCOM4
Property,Standa8SMC4XY,Port Y,xi-com:%5C%5C.%5CCOM5
Property,Standa8SMC4XY,UnitMultiplierX,1.2500
Property,Standa8SMC4XY,UnitMultiplierY,1.2500
Property,Luxx-638,Port,COM6
Property,Luxx-488,Port,COM8
Property,Cobolt,Max Power,75.0000
Property,Cobolt,Port,COM7

# Pre-init settings for COM ports
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,500000
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,115200
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1
Property,COM8,AnswerTimeout,500.0000
Property,COM8,BaudRate,500000
Property,COM8,DelayBetweenCharsMs,0.0000
Property,COM8,Handshaking,Off
Property,COM8,Parity,None
Property,COM8,StopBits,1
Property,COM8,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,Standa8SMC4Z,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,Cobolt
Property,Core,Focus,Standa8SMC4Z
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: laserY-561nm
# Preset: medium-37mW
ConfigGroup,laserY-561nm,medium-37mW,Cobolt,Laser,On
ConfigGroup,laserY-561nm,medium-37mW,Cobolt,PowerSetpoint,37.0000

# Preset: OFF
ConfigGroup,laserY-561nm,OFF,Cobolt,Laser,Off
ConfigGroup,laserY-561nm,OFF,Cobolt,PowerSetpoint,37.0000

# Preset: low-10mW
ConfigGroup,laserY-561nm,low-10mW,Cobolt,Laser,On
ConfigGroup,laserY-561nm,low-10mW,Cobolt,PowerSetpoint,10.0000


# Group: laserR-638nm
# Preset: low
ConfigGroup,laserR-638nm,low,Luxx-638,Laser Operation Select,On
ConfigGroup,laserR-638nm,low,Luxx-638,Laser Power Set-point Select [mW],10.0122

# Preset: very low
ConfigGroup,laserR-638nm,very low,Luxx-638,Laser Operation Select,On
ConfigGroup,laserR-638nm,very low,Luxx-638,Laser Power Set-point Select [mW],3.0037

# Preset: medium
ConfigGroup,laserR-638nm,medium,Luxx-638,Laser Operation Select,On
ConfigGroup,laserR-638nm,medium,Luxx-638,Laser Power Set-point Select [mW],60.0000

# Preset: OFF
ConfigGroup,laserR-638nm,OFF,Luxx-638,Laser Operation Select,Off
ConfigGroup,laserR-638nm,OFF,Luxx-638,Laser Power Set-point Select [mW],5.0061

# Preset: full power
ConfigGroup,laserR-638nm,full power,Luxx-638,Laser Operation Select,On
ConfigGroup,laserR-638nm,full power,Luxx-638,Laser Power Set-point Select [mW],100.0000


# Group: Channel

# Group: System
# Preset: Startup


# Group: laserB-488nm
# Preset: low
ConfigGroup,laserB-488nm,low,Luxx-488,Laser Operation Select,On
ConfigGroup,laserB-488nm,low,Luxx-488,Laser Power Set-point Select [mW],9.9878

# Preset: medium
ConfigGroup,laserB-488nm,medium,Luxx-488,Laser Operation Select,On
ConfigGroup,laserB-488nm,medium,Luxx-488,Laser Power Set-point Select [mW],40.0000

# Preset: OFF
ConfigGroup,laserB-488nm,OFF,Luxx-488,Laser Operation Select,Off
ConfigGroup,laserB-488nm,OFF,Luxx-488,Laser Power Set-point Select [mW],9.9878

# Preset: high
ConfigGroup,laserB-488nm,high,Luxx-488,Laser Operation Select,On
ConfigGroup,laserB-488nm,high,Luxx-488,Laser Power Set-point Select [mW],70.0122



# PixelSize settings
# Resolution preset: SPIM
ConfigPixelSize,SPIM,Core,Initialize,1
PixelSize_um,SPIM,1.45


