# Generated by Configurator on Thu Oct 24 13:15:29 CEST 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,COM8,SerialManager,COM8
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,laser638,Omicron,Omicron
Device,laser488,Omicron,Omicron

# Pre-init settings for devices
Property,laser638,Port,COM6
Property,laser488,Port,COM8

# Pre-init settings for COM ports
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,500000
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM8,AnswerTimeout,2500.0000
Property,COM8,BaudRate,500000
Property,COM8,DataBits,8
Property,COM8,DelayBetweenCharsMs,0.0000
Property,COM8,Fast USB to Serial,Disable
Property,COM8,Handshaking,Off
Property,COM8,Parity,None
Property,COM8,StopBits,1
Property,COM8,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

