# Generated by Configurator on Thu Oct 24 13:41:06 CEST 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,COM13,SerialManager,COM13
Device,COM8,SerialManager,COM8
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,laser638,Omicron,Omicron
Device,laser488,Omicron,Omicron
Device,ShutterA_right,UserDefinedSerial,UserDefinedShutter
Device,ShutterD_left,UserDefinedSerial,UserDefinedShutter

# Pre-init settings for devices
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,500000
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM13,AnswerTimeout,500.0000
Property,COM13,BaudRate,9600
Property,COM13,DataBits,8
Property,COM13,DelayBetweenCharsMs,0.0000
Property,COM13,Handshaking,Off
Property,COM13,Parity,None
Property,COM13,StopBits,1
Property,COM13,Verbose,1
Property,COM13,Fast USB to Serial,Disable
Property,COM8,AnswerTimeout,2500.0000
Property,COM8,BaudRate,500000
Property,COM8,DataBits,8
Property,COM8,DelayBetweenCharsMs,0.0000
Property,COM8,Fast USB to Serial,Disable
Property,COM8,Handshaking,Off
Property,COM8,Parity,None
Property,COM8,StopBits,1
Property,COM8,Verbose,1
Property,laser638,Port,COM6
Property,laser488,Port,COM8
Property,ShutterA_right,Close-command,A0
Property,ShutterA_right,Close-response,
Property,ShutterA_right,Command mode,ASCII-no-terminator
Property,ShutterA_right,Initialize-command,
Property,ShutterA_right,Initialize-response,
Property,ShutterA_right,Open-command,A1
Property,ShutterA_right,Open-response,
Property,ShutterA_right,Port,COM13
Property,ShutterA_right,QueryState-closed-response,
Property,ShutterA_right,QueryState-command,
Property,ShutterA_right,QueryState-open-response,
Property,ShutterA_right,Response detection,Ignore responses
Property,ShutterA_right,Shutdown-command,
Property,ShutterA_right,Shutdown-response,
Property,ShutterD_left,Close-command,D0
Property,ShutterD_left,Close-response,
Property,ShutterD_left,Command mode,ASCII-no-terminator
Property,ShutterD_left,Initialize-command,
Property,ShutterD_left,Initialize-response,
Property,ShutterD_left,Open-command,D1
Property,ShutterD_left,Open-response,
Property,ShutterD_left,Port,COM13
Property,ShutterD_left,QueryState-closed-response,
Property,ShutterD_left,QueryState-command,
Property,ShutterD_left,QueryState-open-response,
Property,ShutterD_left,Response detection,Ignore responses
Property,ShutterD_left,Shutdown-command,
Property,ShutterD_left,Shutdown-response,

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays
Delay,ShutterA_right,500.0
Delay,ShutterD_left,500.0

# Focus directions

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: laser488
# Preset: 10mW
ConfigGroup,laser488,10mW,laser488,Laser Operation Select,On
ConfigGroup,laser488,10mW,laser488,Laser Power Set-point Select [%],9.9878

# Preset: on
ConfigGroup,laser488,on,laser488,Laser Operation Select,On
ConfigGroup,laser488,on,laser488,Laser Power Set-point Select [%],40.0000

# Preset: off
ConfigGroup,laser488,off,laser488,Laser Operation Select,Off
ConfigGroup,laser488,off,laser488,Laser Power Set-point Select [%],40.0000


# Group: laser638
# Preset: on
ConfigGroup,laser638,on,laser638,Laser Operation Select,On
ConfigGroup,laser638,on,laser638,Laser Power Set-point Select [%],5.0061

# Preset: off
ConfigGroup,laser638,off,laser638,Laser Operation Select,Off
ConfigGroup,laser638,off,laser638,Laser Power Set-point Select [%],5.0061



# PixelSize settings

